/gate/geometry/setMaterialDatabase    data/GateMaterials.db

#     W O R L D

/gate/world/geometry/setXLength       	150.0 cm
/gate/world/geometry/setYLength       	150.0 cm
/gate/world/geometry/setZLength       	150.0 cm
/gate/world/setMaterial Air
/gate/world/vis/setVisible 1

#------Pb up------------------------------------------
/gate/world/daughters/name 			scanner0
/gate/world/daughters/insert 			cylinder
/gate/scanner0/geometry/setRmin          	0.0 cm
/gate/scanner0/geometry/setRmax          	25.4 cm
/gate/scanner0/geometry/setHeight        	11.4 cm
/gate/scanner0/placement/setTranslation 	0.0 0.0 29.83 cm
/gate/scanner0/setMaterial 			Lead
/gate/scanner0/vis/setVisible 			1
/gate/scanner0/vis/setColor              	yellow

#------Pb mid---------------------------------------
/gate/world/daughters/name 			scanner00
/gate/world/daughters/insert 			cylinder
/gate/scanner00/geometry/setRmin          	13.95 cm
/gate/scanner00/geometry/setRmax          	25.4 cm
/gate/scanner00/geometry/setHeight        	30.5 cm
/gate/scanner00/placement/setTranslation 	0.0 0.0 8.93 cm
/gate/scanner00/setMaterial 			Lead
/gate/scanner00/vis/setVisible 			1
/gate/scanner00/vis/setColor              	yellow

#------Pb down---------------------------------------
/gate/world/daughters/name 			scanner000
/gate/world/daughters/insert 			cylinder
/gate/scanner000/geometry/setRmin          	5.7 cm
/gate/scanner000/geometry/setRmax          	25.4 cm
/gate/scanner000/geometry/setHeight        	11.4 cm
/gate/scanner000/placement/setTranslation 	0.0 0.0 -12.0 cm
/gate/scanner000/setMaterial 			Lead
/gate/scanner000/vis/setVisible 			1
/gate/scanner000/vis/setColor              	yellow

#------Al------------------------------------------
/gate/world/daughters/name 			scanner
/gate/world/daughters/insert 			cylinder
/gate/scanner/geometry/setRmin          	0 cm
/gate/scanner/geometry/setRmax          	3.0 cm
/gate/scanner/geometry/setHeight        	6 cm
/gate/scanner/placement/setTranslation 	0.0 0.0 -3.11 cm
/gate/scanner/setMaterial 			Aluminium
/gate/scanner/vis/setVisible 			1
/gate/scanner/vis/setColor              	blue

#------Vacuum------------------------------------------
/gate/scanner/daughters/name 			scanner1
/gate/scanner/daughters/insert 			cylinder
/gate/scanner1/geometry/setRmin          	0 cm
/gate/scanner1/geometry/setRmax          	2.9 cm
/gate/scanner1/geometry/setHeight        	5.9 cm
/gate/scanner1/placement/setTranslation 	0.0 0.0 0.0 cm
/gate/scanner1/setMaterial 			Vacuum
/gate/scanner1/vis/setVisible 			1
/gate/scanner1/vis/setColor              	white

#----Germanium------------------------------------------
/gate/scanner1/daughters/name          	Ger
/gate/scanner1/daughters/insert        	cylinder
/gate/Ger/geometry/setRmin          	0.0 cm
/gate/Ger/geometry/setRmax          	2.7 cm
/gate/Ger/geometry/setHeight        	4.95 cm
/gate/Ger/placement/setTranslation 	0.0 0.0 0.3 cm
/gate/Ger/setMaterial               	Germanium
/gate/Ger/vis/setColor              	red


/gate/systems/scanner/level1/attach  Ger
/gate/Ger/attachCrystalSD

#--- PMT



